PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Distractor_gaze
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine dist_trial
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    ImageComponent Smileycentral
      image [set every repeat] = Smiley_central.png
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_gaze
      allowedKeys = '2', '3'
      correctAns = $correctResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    ImageComponent Smiley
      image [set every repeat] = $Smiley_file
      size = (1,0.5)
      startVal [time (s)] = 0.5
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    PolygonComponent circle
      fillColor = -1.0000, -0.2157, -1.0000
      lineColor = -1.0000, -0.2157, -1.0000
      pos [set every repeat] = circlePos
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.5
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    PolygonComponent distractorcircle
      fillColor = 0.7255, -0.8431, -0.5294
      lineColor = 0.7255, -0.8431, -0.5294
      pos [set every repeat] = distractorPos
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.5
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    CodeComponent dist_code
      Code Type = Auto->JS
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      Begin Experiment:
        startTime = core.getTime()
        fback_text = ""
        rt = ""
      Begin Routine:
        if core.getTime() - startTime >= 187:
            dist_trials.finished = True
      End Routine:
        fback_text = ""
        rt = ""

        if key_resp_gaze.corr == 1:
            rt = "{:.2f} s".format(key_resp_gaze.rt)
            fback_text = "Gut gemacht!\nReaktionszeit: "
            fback_text = fback_text + rt
        else:
            fback_text = "Sie haben den falschen Kopf gedrückt."
  Routine feedback
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    TextComponent dist_fback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $fback_text
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  Routine start_dist
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    TextComponent start_dist_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Jetzt beginnt die Aufgabe. 
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  Routine distractor_instruction
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    TextComponent dist_instruc
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Es folgt nun eine kurze Aufgabe.

        In der Mitte des Bildschirms erscheint ein Smiley, der nach rechts und links schaut. Neben ihm erscheint ein grüner und roter Kreis.

        Ihre Aufgabe ist es anzugeben, wo der GRÜNE Kreis auftaucht.
        Wenn er LINKS auftaucht drücken Sie TASTE 1, wenn er RECHTS auftaucht drücken Sie TASTE 2.

        Starten Sie die Übung durch das Drücken einer beliebigen Taste.
    KeyboardComponent key_resp_dist_instr
      allowedKeys = '2', '3', '4', '5'
      forceEndRoutine = True
      startVal [time (s)] = 1
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Flow
  Routine distractor_instruction
  LoopInitiator dist_practice loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'Smiley_file': 'Smiley_left.png', 'circlePos': [-0.3, 0], 'correctdirection': 'left', 'correctResponse': 2, 'distractorPos': [0.3, 0]},
      {'Smiley_file': 'Smiley_right.png', 'circlePos': [0.3, 0], 'correctdirection': 'right', 'correctResponse': 3, 'distractorPos': [-0.3, 0]},
      {'Smiley_file': 'Smiley_left.png', 'circlePos': [0.3, 0], 'correctdirection': 'right', 'correctResponse': 3, 'distractorPos': [-0.3, 0]},
      {'Smiley_file': 'Smiley_right.png', 'circlePos': [-0.3, 0], 'correctdirection': 'left', 'correctResponse': 2, 'distractorPos': [0.3, 0]}]
    Routine dist_trial
    Routine feedback
  LoopTerminator dist_practice
  Routine start_dist
  LoopInitiator dist_trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1999
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    conditions:
      [{'Smiley_file': 'Smiley_left.png', 'circlePos': [-0.3, 0], 'correctdirection': 'left', 'correctResponse': 2, 'distractorPos': [0.3, 0]},
      {'Smiley_file': 'Smiley_right.png', 'circlePos': [0.3, 0], 'correctdirection': 'right', 'correctResponse': 3, 'distractorPos': [-0.3, 0]},
      {'Smiley_file': 'Smiley_left.png', 'circlePos': [0.3, 0], 'correctdirection': 'right', 'correctResponse': 3, 'distractorPos': [-0.3, 0]},
      {'Smiley_file': 'Smiley_right.png', 'circlePos': [-0.3, 0], 'correctdirection': 'left', 'correctResponse': 2, 'distractorPos': [0.3, 0]}]
    Routine dist_trial
  LoopTerminator dist_trials
