PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Completed URL = https://regensburg.sona-systems.com/webstudy_credit.aspx?experiment_id=1093&credit_token=3ab017d6ceb04173ba128bd636423369&survey_code=" + expInfo[‘participant’]
  Data filename = u'data/%s_%s_%s' % (expInfo['ID-Nummer'], expName, expInfo['date'])
  Experiment info = {'ID-Nummer': 'f"{randint(0, 999999):06.0f}"', 'Alter': '', 'Geschlecht (optional)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = guess
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Willkommen zum Ratespiel Experiment!
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    CodeComponent experiment_setup
      Code Type = Both
      Begin Experiment:
        # import random for letter randomization
        import random as rnd
      Begin JS Experiment:
        //Hide mouse
        document.body.style.cursor='none';
      End JS Experiment:
        document.body.style.cursor='auto';
  Routine encode
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    TextComponent dash_stim_learning
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = -
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    TextComponent cue_stim_learning
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $cue
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    TextComponent target_stim
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $target
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    KeyboardComponent end_encoding
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.00
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    CodeComponent save_learning_trial_type
      Code Type = Auto->JS
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      Begin Experiment:
        cue_types = {}
        target_types = {}
      Begin Routine:
        cue_types[cue] = guess_cond
        target_types[target] = guess_cond
        thisExp.addData('trial_type', guess_cond)
  Routine instructions1
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    TextComponent instructions1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Teil 1

        Im ersten Teil des Experiments werden Ihnen Wortpaare auf dem Bildschirm angezeigt.

        Zum Beispiel:

        Computer - Tastatur

        Ihre Aufgabe ist es, sich so viele Wortpaare wie möglich einzuprägen.

        Drücken Sie die LEERTASTE, um fortzufahren.
    KeyboardComponent instruction1_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions2
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    TextComponent instructions2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Manchmal wird Ihnen ein einzelnes Wort auf dem Bildschirm angezeigt, bevor Sie das gesamte Wortpaar sehen, und Sie müssen raten, was das andere Wort sein könnte.

        Zum Beispiel:

        Computer - ?

        Drücken Sie die LEERTASTE, um fortzufahren.
    KeyboardComponent instruction2_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_guess
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    CodeComponent skip_guess_feedback
      Code Type = Auto->JS
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      Begin Routine:
        if guess_cond == "Read":
            trial_dur = 0.001
        else:
            trial_dur = 2
    CodeComponent guess_feedback
      Code Type = Auto->JS
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      Begin Routine:
        feedback = "Ihre Antwort: "

        if guess_reached.keys == "f":
            feedback = feedback + "\nKeinen Rateversuch gemacht."
        elif guess_reached.keys == "g":
            feedback = feedback + "\nEinen Rateversuch gemacht."
        elif guess_reached.keys == "h":
            feedback = feedback + "\nMehrere Rateversuche gemacht."
        else:
            feedback = feedback + "\nKeine Antwort gegeben."
    TextComponent no_response_feedback
      durationEstim = 0.01
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $feedback
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  Routine feedback_rate
    RoutineSettingsComponent feedback_rate
      skipIf = $rate_relatedness.keys == None
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    TextComponent rating_feedback
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Your rating:
    TextComponent rating_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $rate_relatedness.keys
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  Routine feedback_no_rating
    RoutineSettingsComponent feedback_no_rating
      skipIf = $rate_relatedness.keys != None
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    TextComponent no_rating_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        You did not rate the relatedness.

        You need to rate how related you think the words are.
  Routine guess
    RoutineSettingsComponent guess
      skipIf = guess_cond == "Read"
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    CodeComponent skip_guess
      Code Type = Auto->JS
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      Begin Experiment:
        trial_dur = 0
      Begin Routine:
        if guess_cond == "Read":
            trial_dur = 0.001
        else:
            trial_dur = 3
    TextComponent dash_stim_guessing
      durationEstim = 0.01
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = -
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    TextComponent cue_stim_guessing
      durationEstim = 0.01
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $cue
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    TextComponent guess_stim
      durationEstim = 0.01
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = ?
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    KeyboardComponent end_guess
      allowedKeys = 'p'
      durationEstim = 0.01
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
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  Routine end_part1
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    KeyboardComponent end_part1_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent end_part1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sie haben den ersten Teil des Experiments abgeschlossen!

        Machen Sie eine 5-minütige Pause, bevor Sie fortfahren.

        Drücken Sie die LEERTASTE, um fortzufahren.
  Routine guess_response
    RoutineSettingsComponent guess_response
      skipIf = guess_cond == "Read"
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    CodeComponent skip_guess_response
      Code Type = Auto->JS
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      Begin Routine:
        if guess_cond == "Read":
            trial_dur = 0.001
        else:
            trial_dur = 2
    TextComponent dash_stim_guessing_resp
      durationEstim = 0.01
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = -
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    TextComponent cue_stim_guessing_resp
      durationEstim = 0.01
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $cue
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    TextComponent guess_stim_resp
      durationEstim = 0.01
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = ?
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    TextComponent guess_question
      durationEstim = 0.01
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
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      text:
        Wie viele Rateversuche haben Sie gemacht?

        F) 0        G) 1        H) Mehr
    KeyboardComponent guess_reached
      allowedKeys = 'f', 'g', 'h'
      durationEstim = 0.01
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
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  Routine instructions3
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    TextComponent instructions3_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Raten Sie nicht laut, sondern versuchen Sie möglichst viele Assoziationen zum linken Wort leise in Ihrem Kopf zu generieren.

        Zum Beispiel könnten Ihnen zum Wort "Sommerferien" folgende Assoziationen einfallen: Urlaub, Strand, Reisen, Ferienjob, Eis und so weiter.

        Drücken Sie die LEERTASTE, um fortzufahren.
    KeyboardComponent instruction3_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cued_recall
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    TextComponent cue_stim_recall
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $cue
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    TextComponent dash_stim_recall
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = -
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    TextComponent qmark_target
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = ?
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    KeyboardComponent end_cued_recall
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent save_recall_trial_type
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('trial_type', cue_types[cue])
  Routine recall_response
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    TextComponent dash_stim_recall_resp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = -
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    TextComponent cue_stim_recall_resp
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $cue
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    TextComponent recall_stim_resp
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = ?
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    TextComponent recall_question
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Können Sie sich an das Wortpaar erinnern?

        F) Nein        G) Ja
    KeyboardComponent recall_reached
      allowedKeys = 'f', 'g'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent skip_recall_select
      Code Type = Auto->JS
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      End Routine:
        print(recall_reached.keys)
        skip_letters = 0
        trial_dur = 3
        if recall_reached.keys == "g":
            trial_dur = 3
        else:
            trial_dur = 0.01
            skip_letters = 1
        print(trial_dur)
  Routine recall_select
    RoutineSettingsComponent recall_select
      forceNonSlip = True
      skipIf = skip_letters == 1
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    CodeComponent letter_choice
      Code Type = Both
      Before JS Experiment:
        function getRandomLetters(targetLetter) {
            // Az elérhető karakterek listája
            const characters = "abcdefghjklmnoprstuvz".split("");

            // Véletlenszerűen választunk 3 karaktert, amelyek nem egyeznek a megadott célkarakterrel
            let randomLetters = [];
            while (randomLetters.length < 3) {
                const randomChar = characters[Math.floor(Math.random() * characters.length)];
                if (randomChar !== targetLetter && !randomLetters.includes(randomChar)) {
                    randomLetters.push(randomChar);
                }
            }

            // Hozzáadjuk a célkaraktert a listához
            randomLetters.push(targetLetter);

            // A karakterek sorrendjének összekeverése
            for (let i = randomLetters.length - 1; i > 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [randomLetters[i], randomLetters[j]] = [randomLetters[j], randomLetters[i]];
            }

            return randomLetters;
        }

        function generateRecallText(letters) {
            let recallText = "Der letzte Buchstabe des Wortes:\n";
            recallText += `1) ${letters[0]}        `;
            recallText += `2) ${letters[1]}        `;
            recallText += `3) ${letters[2]}        `;
            recallText += `4) ${letters[3]}`;
            return recallText;
        }
      Begin JS Routine:
        target_letter = target.slice((- 1))[0]; // Például ez a célkarakter
        result = getRandomLetters(target_letter);
        psychoJS.experiment.addData("letter_options", result);
        recall_select_text = generateRecallText(result);
        console.log(recall_select_text);
        console.log(trial_dur)
      Begin Routine:
        recall_select_text = "Wählen Sie den letzten Buchstaben des Wortes mit einer Zahlentaste.\n"

        random_letters = rnd.sample("abcdefghijklmnoprstuvz", k=3)
        target_letter = target[-1]
        while target_letter in random_letters:
            random_letters = rnd.sample("abcdefghijklmnoprstuvz", k=3)


        random_letters.append(target_letter)
        print(random_letters)
        letters = rnd.sample(random_letters, len(random_letters))
        print(letters)
        recall_select_text += "1) " + letters[0] + "        "
        recall_select_text += "2) " + letters[1] + "        "
        recall_select_text += "3) " + letters[2] + "        "
        recall_select_text += "4) " + letters[3]
    TextComponent dash_stim_recall_select
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = -
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    TextComponent cue_stim_recall_select
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $cue
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    TextComponent recall_stim_select
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = ?
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    TextComponent recall_question_select
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $recall_select_text
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    KeyboardComponent recall_selection
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
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  Routine iti_learning
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    CodeComponent set_guess_stim
      Code Type = Auto->JS
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      Begin Routine:
        guess_cond = guess_list.pop()[0]
        print(guess_cond)
    TextComponent iti_learning_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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  Routine end_part2
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    KeyboardComponent end_part2_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent end_part2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sie haben den zweiten Teil des Experiments abgeschlossen!

        Machen Sie eine 5-minütige Pause, bevor Sie fortfahren.

        Drücken Sie die LEERTASTE, um fortzufahren.
  Routine item
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    TextComponent semantic_map_item
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $list_item
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    KeyboardComponent living_nonliving
      allowedKeys = 'f','g'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent end_mapping
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent living_nonliving_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = F) Lebendig        G) Nicht lebendig
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    CodeComponent save_sm_trial_type
      Code Type = Auto->JS
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      Begin Routine:
        if list_item in target_types:
            thisExp.addData('sm_trial_type', target_types[list_item])
            thisExp.addData('trial_type', target_types[list_item])
        else:
            thisExp.addData('sm_trial_type', "Mediator")
            thisExp.addData('trial_type', cue_types[cue])
  Routine iti_learning_practice
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    CodeComponent set_practice_guess_stim
      Code Type = Auto->JS
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      End Routine:
        guess_cond = practice_list.pop()[0]
        print(guess_cond)
    TextComponent iti_practice_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine start_task
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    TextComponent start_task_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Jetzt beginnt die Aufgabe. Sie erhalten keine Rückmeldungen mehr.

        Drücken Sie die LEERTASTE, wenn Sie bereit sind zu starten.
    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent reset_trial_counter
      Code Type = Auto->JS
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      Begin Routine:
        task_trial = 0
  Routine mapping_break
    RoutineSettingsComponent mapping_break
      skipIf = mapping_trial < 60
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    TextComponent break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Pause. Drücken Sie die LEERTASTE, um fortzufahren.
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    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent reset_counter
      Code Type = Auto->JS
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      Begin Experiment:
        mapping_trial = 0
      Begin Routine:
        mapping_trial = mapping_trial + 1
        print("mapping_trial", mapping_trial)
      End Routine:
        if mapping_trial == 60:
            mapping_trial = 0

        print('break', mapping_trial)
  Routine thanks
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    TextComponent thanks_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Das ist das Ende des Experiments.

        Vielen Dank!
  Routine task_break
    RoutineSettingsComponent task_break
      skipIf = task_trial < 40
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    TextComponent task_break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Pause. Drücken Sie die LEERTASTE, um fortzufahren.
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    KeyboardComponent task_break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent task_reset_counter
      Code Type = Auto->JS
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      Begin Routine:
        task_trial = task_trial + 1
      End Routine:
        if task_trial == 40:
            task_trial = 0

        print('break', task_trial)
  Routine load_guess_conditions
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    CodeComponent load_guess_list
      Code Type = Auto->JS
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      Begin Experiment:
        guess_list = []
        practice_list = ["Read", "Guess", "Guess", "Read"]
      Begin Routine:
        guess_list.append(guess_trial)
      End Experiment:
        print(guess_list)
  Routine iti
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    TextComponent iti_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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  Routine instructions5
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    TextComponent instructions5_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Zusammenfassung:
        Ihre Aufgabe ist es, so viele der auf dem Bildschirm präsentierten Wortpaare wie möglich zu lernen.

        Manchmal wird Ihnen zunächst nur ein einzelnes Wort angezeigt, und Sie müssen raten, was das zugehörige Wortpaar sein könnte. Drücken Sie F, G oder H, um anzugeben, ob Sie einen Rateversuch gemacht haben.

        Vor dem Experiment werden Sie die Aufgabe üben.

        Drücken Sie die LEERTASTE, um mit der Übung zu beginnen.
    KeyboardComponent instruction5_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions4
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    TextComponent instructions4_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Sie haben 3 Sekunden Zeit, um nach dem Erscheinen des linken Wortes mindestens einen stillen Rateversuch zu machen. Danach müssen Sie angeben, ob Sie einen oder mehrere Rateversuche machen konnten, indem Sie die Tasten F, G oder H drücken.

        F) Keinen Rateversuch generiert G) Einen Rateversuch generiert H) Mehr als einen Rateversuch generiert

        Drücken Sie die LEERTASTE, um fortzufahren.
    KeyboardComponent instruction4_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_recall1
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    TextComponent recall_instructions1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Im nächsten Teil des Experiments müssen Sie das Wortpaar zu jedem auf dem Bildschirm angezeigten Wort abrufen.

        Versuchen Sie, das Wort (3 Sekunden) abzurufen, und geben Sie dann an, ob Sie sich an das Wort erinnern, indem Sie die Tasten F (Kann mich nicht erinnern) und G (Kann mich erinnern) verwenden.

        Drücken Sie die LEERTASTE, um fortzufahren.
    KeyboardComponent recall_instructions1_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_recall2
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    TextComponent recall_instructions1_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Wenn Sie sich an das Wort erinnern können, fragen wir Sie nach dem letzten Buchstaben des Wortes. Sie können aus 4 Optionen wählen (Tasten 1-4).

        Bevor Sie starten, üben Sie die Aufgabe.

        Drücken Sie die LEERTASTE, um mit der Übung zu beginnen.
    KeyboardComponent recall_instructions1_key_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_semantic_mapping1
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    TextComponent sm_instructions1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Im letzten Teil des Experiments wird Ihnen eine Liste von Wörtern jeweils einzeln auf dem Bildschirm präsentiert. Sie müssen entscheiden, ob das Wort etwas Lebendiges oder Nicht-Lebendiges bezeichnet.

        Drücken Sie die LEERTASTE, um fortzufahren.
    KeyboardComponent sm_instructions1_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_semantic_mapping2
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    TextComponent sm_instructions2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Bei manchen Wörtern ist es schwieriger, diese Entscheidung zu treffen als bei anderen. Es gibt nicht immer eine richtige oder falsche Antwort. Verlassen Sie sich auf Ihre Intuition, die Entscheidung liegt bei Ihnen!

        Geben Sie Ihre Antwort mit den Tasten F / G an.

        Drücken Sie die LEERTASTE, um die Aufgabe zu starten.
    KeyboardComponent sm_instructions2_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine recall_feedback
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    TextComponent dash_stim_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = -
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    TextComponent cue_stim_feedback
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $cue
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    TextComponent target_stim_feedback
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $target
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    KeyboardComponent end_feedback
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.00
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    CodeComponent save_learning_trial_type_2
      Code Type = Auto->JS
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      Begin Experiment:
        cue_types = {}
        target_types = {}
      Begin Routine:
        cue_types[cue] = guess_cond
        target_types[target] = guess_cond
        thisExp.addData('trial_type', guess_cond)
    TextComponent recall_feedback1
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Der letzte Buchstabe:
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    TextComponent recall_feedback2
      letterHeight = 0.05
      pos = (0.0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $target[-1]
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Flow
  Routine welcome
  LoopInitiator guess_conditions loopType="TrialHandler"
    conditionsFile = guess_trial_randomization.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'guess_trial': 'Read', 'randomizer': 0.5151330900735425},
      {'guess_trial': 'Guess', 'randomizer': 0.9521622061185603},
      {'guess_trial': 'Read', 'randomizer': 0.023475980425411325},
      {'guess_trial': 'Guess', 'randomizer': 0.25635452180506624},
      {'guess_trial': 'Read', 'randomizer': 0.6404020411274577},
      {'guess_trial': 'Guess', 'randomizer': 0.018734469646123464},
      {'guess_trial': 'Read', 'randomizer': 0.7772015690443097},
      {'guess_trial': 'Guess', 'randomizer': 0.6447920965299975},
      {'guess_trial': 'Read', 'randomizer': 0.19628716470246532},
      {'guess_trial': 'Guess', 'randomizer': 0.48150969693089274},
      {'guess_trial': 'Read', 'randomizer': 0.613164444188032},
      {'guess_trial': 'Guess', 'randomizer': 0.805573121826868},
      {'guess_trial': 'Read', 'randomizer': 0.24480295044966605},
      {'guess_trial': 'Guess', 'randomizer': 0.5482373304984292},
      {'guess_trial': 'Read', 'randomizer': 0.11848935647538872},
      {'guess_trial': 'Guess', 'randomizer': 0.07594749442308124},
      {'guess_trial': 'Read', 'randomizer': 0.8122070180757547},
      {'guess_trial': 'Guess', 'randomizer': 0.10443709664628964},
      {'guess_trial': 'Read', 'randomizer': 0.6778095400312084},
      {'guess_trial': 'Guess', 'randomizer': 0.09659581772781523},
      {'guess_trial': 'Read', 'randomizer': 0.853624920285945},
      {'guess_trial': 'Guess', 'randomizer': 0.3875191100267211},
      {'guess_trial': 'Read', 'randomizer': 0.4835191409713012},
      {'guess_trial': 'Guess', 'randomizer': 0.7814405219103098},
      {'guess_trial': 'Read', 'randomizer': 0.036047544470137693}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
    Routine load_guess_conditions
  LoopTerminator guess_conditions
  Routine instructions1
  Routine instructions2
  Routine instructions3
  Routine instructions4
  Routine instructions5
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Wand', 'target': 'Fenster', 'guess_cond': 'Guess'},
      {'cue': 'Frühstück', 'target': 'Brot', 'guess_cond': 'Read'},
      {'cue': 'Hund', 'target': 'Pfote', 'guess_cond': 'Read'},
      {'cue': 'Park', 'target': 'Baum', 'guess_cond': 'Guess'}]
    Routine iti_learning_practice
    Routine guess
    Routine guess_response
    Routine feedback_guess
    Routine encode
  LoopTerminator practice_trials
  Routine start_task
  LoopInitiator learning_trials loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = cue_target_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Akrobatin', 'target': 'Seil'},
      {'cue': 'Chips', 'target': 'Salz'},
      {'cue': 'Definition', 'target': 'Begriff'},
      {'cue': 'Experiment', 'target': 'Versuch'},
      {'cue': 'Fakt', 'target': 'Wissen'},
      {'cue': 'Leistung', 'target': 'Ehre'},
      {'cue': 'Rauch', 'target': 'Nebel'},
      {'cue': 'Scheidung', 'target': 'Anwalt'},
      {'cue': 'Service', 'target': 'Kunde'},
      {'cue': 'Shampoo', 'target': 'Seife'},
      {'cue': 'Soldat', 'target': 'Kämpfer'},
      {'cue': 'Zeichnung', 'target': 'Bleistift'},
      {'cue': 'Anführer', 'target': 'Boss'},
      {'cue': 'Beutel', 'target': 'Sack'},
      {'cue': 'Gast', 'target': 'Zimmer'},
      {'cue': 'Geburtstag', 'target': 'Kerze'},
      {'cue': 'Geschwister', 'target': 'Eltern'},
      {'cue': 'Golf', 'target': 'Loch'},
      {'cue': 'Küche', 'target': 'Tisch'},
      {'cue': 'Rasen', 'target': 'Pflege'},
      {'cue': 'Safari', 'target': 'Ausflug'},
      {'cue': 'Sitzgurt', 'target': 'Gesetz'},
      {'cue': 'Vampir', 'target': 'Geist'},
      {'cue': 'Vergangenheit', 'target': 'Erinnerungen'},
      {'cue': 'Agent', 'target': 'Reise'},
      {'cue': 'Brise', 'target': 'Luft'},
      {'cue': 'Decke', 'target': 'Kissen'},
      {'cue': 'Diskussion', 'target': 'Vorlesung'},
      {'cue': 'Eingeweide', 'target': 'Organ'},
      {'cue': 'Floh', 'target': 'Käfer'},
      {'cue': 'Frieden', 'target': 'Harmonie'},
      {'cue': 'Garage', 'target': 'Haus'},
      {'cue': 'Gegenstand', 'target': 'Artikel'},
      {'cue': 'Humor', 'target': 'Komödie'},
      {'cue': 'Insel', 'target': 'Meer'},
      {'cue': 'Karneval', 'target': 'Festival'},
      {'cue': 'Mappe', 'target': 'Buch'},
      {'cue': 'Publikum', 'target': 'Applaus'},
      {'cue': 'Pumpe', 'target': 'Reifen'}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
    Routine iti_learning
    Routine guess
    Routine guess_response
    Routine encode
    Routine task_break
  LoopTerminator learning_trials
  Routine end_part1
  Routine instructions_recall1
  Routine instructions_recall2
  LoopInitiator test_practice_trials loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Wand', 'target': 'Fenster'},
      {'cue': 'Frühstück', 'target': 'Brot'},
      {'cue': 'Hund', 'target': 'Pfote'},
      {'cue': 'Park', 'target': 'Baum'}]
    Routine iti
    Routine cued_recall
    Routine recall_response
    Routine recall_select
    Routine recall_feedback
  LoopTerminator test_practice_trials
  Routine start_task
  LoopInitiator test_trials loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = cue_target_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine iti
    Routine cued_recall
    Routine recall_response
    Routine recall_select
    Routine task_break
  LoopTerminator test_trials
  Routine end_part2
  Routine instructions_semantic_mapping1
  Routine instructions_semantic_mapping2
  LoopInitiator semantic_mapping loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = targets_mediators.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Akrobatin', 'list_item': 'Seil', 'kind': 'target'},
      {'cue': 'Chips', 'list_item': 'Salz', 'kind': 'target'},
      {'cue': 'Definition', 'list_item': 'Begriff', 'kind': 'target'},
      {'cue': 'Experiment', 'list_item': 'Versuch', 'kind': 'target'},
      {'cue': 'Fakt', 'list_item': 'Wissen', 'kind': 'target'},
      {'cue': 'Leistung', 'list_item': 'Ehre', 'kind': 'target'},
      {'cue': 'Rauch', 'list_item': 'Nebel', 'kind': 'target'},
      {'cue': 'Scheidung', 'list_item': 'Anwalt', 'kind': 'target'},
      {'cue': 'Service', 'list_item': 'Kunde', 'kind': 'target'},
      {'cue': 'Shampoo', 'list_item': 'Seife', 'kind': 'target'},
      {'cue': 'Soldat', 'list_item': 'Kämpfer', 'kind': 'target'},
      {'cue': 'Zeichnung', 'list_item': 'Bleistift', 'kind': 'target'},
      {'cue': 'Anführer', 'list_item': 'Boss', 'kind': 'target'},
      {'cue': 'Beutel', 'list_item': 'Sack', 'kind': 'target'},
      {'cue': 'Gast', 'list_item': 'Zimmer', 'kind': 'target'},
      {'cue': 'Geburtstag', 'list_item': 'Kerze', 'kind': 'target'},
      {'cue': 'Geschwister', 'list_item': 'Eltern', 'kind': 'target'},
      {'cue': 'Golf', 'list_item': 'Loch', 'kind': 'target'},
      {'cue': 'Küche', 'list_item': 'Tisch', 'kind': 'target'},
      {'cue': 'Rasen', 'list_item': 'Pflege', 'kind': 'target'},
      {'cue': 'Safari', 'list_item': 'Ausflug', 'kind': 'target'},
      {'cue': 'Sitzgurt', 'list_item': 'Gesetz', 'kind': 'target'},
      {'cue': 'Vampir', 'list_item': 'Geist', 'kind': 'target'},
      {'cue': 'Vergangenheit', 'list_item': 'Erinnerungen', 'kind': 'target'},
      {'cue': 'Agent', 'list_item': 'Reise', 'kind': 'target'}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
    Routine iti
    Routine item
    Routine mapping_break
  LoopTerminator semantic_mapping
  Routine thanks
