PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = part0
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the MRI lab of the University Regensburg!

        We are setting up the scanner and we will start soon...

        Thank you for participating!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        all_keys = ['space', '1','2','3','4','5']

        video_dict = {}
        video_dict['2'] = 'baby_animals.mp4'
        video_dict['3'] = 'deep_sea.mp4'
        video_dict['4'] = 'scotland.mp4'
        video_dict['5'] = 'brazil.mp4'
  Routine hand_intro
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    ImageComponent hand_image
      image = right_hand_silhouette.png
      pos = (0, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent hand_intro_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent hand_intro_text
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        During the tasks, you will have to push the buttons with your fingers on your right hand.

        We will refer to each finger during the task with numbers.

        Let's practice using the buttons!
        If you are ready to practice, push any button.
  Routine button_practice
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    TextComponent instruction
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Press this button:
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    TextComponent button_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $this_button
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    KeyboardComponent button_practice_key
      allowedKeys [set every repeat] = correct_button
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine select_video
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    TextComponent select_video_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great!

        Now we will do the structural scans.
        You can select a video with a button press to watch meanwhile.
        1) Baby Animals
        2) Deep Sea
        3) Scotland
        4) Brazil
    KeyboardComponent select_video_keys
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent select_video_code
      Code Type = Auto->JS
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      End Routine:
        selected = select_video_keys.keys[0]
        this_video = video_dict[selected]
        print(this_video)
  Routine play_video
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    MovieComponent movie
      backend = ffpyplayer
      durationEstim = 600
      forceEndRoutine = False
      movie [set every repeat] = $this_video
      size = (1920,1080)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 600 
      units = pix
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    TextComponent video_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Video is loading...

        We are starting the scanner. Please stay still.
    KeyboardComponent end_video
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The anatomical scan ended. Thank you.

        Now comes the task!
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine hand_intro
  LoopInitiator button_practice_loop loopType="TrialHandler"
    conditionsFile = button_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'this_button': 1, 'correct_button': 2},
      {'this_button': 2, 'correct_button': 3},
      {'this_button': 3, 'correct_button': 4},
      {'this_button': 4, 'correct_button': 5}]
    Routine button_practice
  LoopTerminator button_practice_loop
  Routine select_video
  Routine play_video
  Routine end
