PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/Guess_%s_%s_%s' % (expInfo['PID'], expName, expInfo['date'])
  Experiment info = {'PID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1024, 768]
  expName = part0
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Willkommen im MRT-Labor der Universität Regensburg!

        Wir richten gerade den Scanner ein und starten in Kürze...

        Vielen Dank für Ihre Teilnahme!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        all_keys = ['space', '1','2','3','4','5']

        video_dict = {}
        video_dict['2'] = 'baby_animals.mp4'
        video_dict['3'] = 'deep_sea.mp4'
        video_dict['4'] = 'scotland.mp4'
        video_dict['5'] = 'brazil.mp4'
  Routine hand_intro
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    ImageComponent hand_image
      image = right_hand_silhouette.png
      pos = (0, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent hand_intro_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent hand_intro_text
      letterHeight = 0.04
      pos = (0, 0.23)
      startVal [time (s)] = 0.0
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      text:
        Während der Aufgaben werden Sie die Tasten mit den Fingern Ihrer rechten Hand drücken.

        Jeder Finger wird während der Aufgabe mit einer Zahl zugeordnet.

        Lassen Sie uns das Drücken der Tasten üben!
        Wenn Sie bereit dazu sind zu üben, drücken Sie eine beliebige Taste.
  Routine button_practice
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    TextComponent instruction
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Drücken Sie diese Tasten:
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    TextComponent button_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $this_button
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    KeyboardComponent button_practice_key
      allowedKeys [set every repeat] = correct_button
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine select_video
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    TextComponent select_video_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Super!

        Jetzt machen wir die strukturelle Aufnahme.
        Sie können währenddessen per Tastendruck ein Video auswählen, das Sie sich anschauen möchten:
        1) Tierbabys
        2) Tiefsee
        3) Schottland
        4) Brasilien
    KeyboardComponent select_video_keys
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent select_video_code
      Code Type = Auto->JS
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      End Routine:
        selected = select_video_keys.keys[0]
        this_video = video_dict[selected]
        print(this_video)
  Routine play_video
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    MovieComponent movie
      backend = ffpyplayer
      durationEstim = 600
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = $this_video
      size = (1024,576)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 600 
      units = pix
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    TextComponent video_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Das Video wird geladen...

        Wir starten jetzt den Scanner. Bitte bleiben Sie still liegen.
    KeyboardComponent end_video
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Der anatomische Scan ist beendet. Vielen Dank!

        Jetzt beginnt die Aufgabe!
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine hand_intro
  LoopInitiator button_practice_loop loopType="TrialHandler"
    conditionsFile = button_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'this_button': 1, 'correct_button': 2},
      {'this_button': 2, 'correct_button': 3},
      {'this_button': 3, 'correct_button': 4},
      {'this_button': 4, 'correct_button': 5}]
    Routine button_practice
  LoopTerminator button_practice_loop
  Routine select_video
  Routine play_video
  Routine end
