PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Completed URL = https://regensburg.sona-systems.com/webstudy_credit.aspx?experiment_id=1093&credit_token=3ab017d6ceb04173ba128bd636423369&survey_code=" + expInfo[‘participant’]
  Data filename = u'data/Guess_%s_%s_%s' % (expInfo['PID'], expName, expInfo['date'])
  Experiment info = {'PID': '', 'Birthyear': '', 'Gender': '', 'Handedness': '', 'MRI': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1024, 768]
  expName = part1_part2
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine dist_trial
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    ImageComponent Smileycentral
      image [set every repeat] = Smiley_central.png
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_gaze
      allowedKeys = '2', '3'
      correctAns = $correctResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    ImageComponent Smiley
      image [set every repeat] = $Smiley_file
      size = (1,0.5)
      startVal [time (s)] = 0.5
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    PolygonComponent circle
      fillColor = -1.0000, -0.2157, -1.0000
      lineColor = -1.0000, -0.2157, -1.0000
      pos [set every repeat] = circlePos
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.5
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    PolygonComponent distractorcircle
      fillColor = 0.7255, -0.8431, -0.5294
      lineColor = 0.7255, -0.8431, -0.5294
      pos [set every repeat] = distractorPos
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.5
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    CodeComponent dist_code
      Code Type = Auto->JS
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      Begin Experiment:
        fback_text = ""
        rt = ""
        dt = 0
      Each Frame:
        if core.getTime() - startTime >= 60:
            if dt == 1:
                dist_trials.finished = True
            elif dt == 0:
                dist_practice.finished = True
      End Routine:
        fback_text = ""
        rt = ""

        if key_resp_gaze.corr == 1:
            rt = "{:.2f} s".format(key_resp_gaze.rt)
            fback_text = "Gut gemacht!\nReaktionszeit: "
            fback_text = fback_text + rt
        else:
            fback_text = "Sie haben den falschen Kopf gedrückt."
  Routine start_dist
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    TextComponent start_dist_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Jetzt beginnt die Aufgabe. 
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    CodeComponent set_dt
      Code Type = Auto->JS
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      End Routine:
        dt = 1
  Routine distractor_instruction
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    TextComponent dist_instruc
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Es folgt nun eine kurze Aufgabe.

        In der Mitte des Bildschirms erscheint ein Smiley, der nach rechts und links schaut. Neben ihm erscheint ein grüner und roter Kreis.

        Ihre Aufgabe ist es anzugeben, wo der GRÜNE Kreis auftaucht.
        Wenn er LINKS auftaucht drücken Sie TASTE 1, wenn er RECHTS auftaucht drücken Sie TASTE 2.

        Starten Sie die Übung durch das Drücken einer beliebigen Taste.
    KeyboardComponent key_resp_dist_instr
      allowedKeys = '2', '3', '4', '5'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent dist_clock1
      Code Type = Auto->JS
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      End Routine:
        startTime = core.getTime()
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Willkommen zum Ratespiel Experiment!
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    CodeComponent experiment_setup
      Code Type = Auto->JS
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      Begin Experiment:
        # import random for letter randomization
        import random as rnd

        if expInfo["MRI"] == "1":
            from psychopy import parallel
            port = parallel.ParallelPort(address = 0x2FE8)
            pinNumber = 10 #Change to match the pin that is receiving the pulse value sent by your scanner. Set this to None to scan all pins

        all_keys = ['space', '1', '2', '3', '4', '5']
        guess_made_key = "2"
        no_guess_made_key = "3"

        guess_dur = 3
        guess_resp_dur = 3
        guess_delay_dur = 3

        cue_types = {}
        target_types = {}

        succ_recall_key = "3"
        letter_dur = 3

        run_counter = 1

        ncorrect = 0
        correct_guess = 0
        correct_read = 0

        num_trials = 40 # number of trials per run
        if expInfo["PID"] == "pilot" :
            num_trials = 2
    KeyboardComponent start_experiment_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine load_guess_conditions
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    CodeComponent load_guess_list
      Code Type = Auto->JS
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      Begin Experiment:
        guess_list = []
        practice_list = ["Read", "Guess", "Guess", "Read"]
      Begin Routine:
        guess_list.append(guess_condition)
  Routine instructions1
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    TextComponent instructions1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Teil 1

        Im ersten Teil des Experiments werden Ihnen Wortpaare auf dem Bildschirm angezeigt.

        Zum Beispiel:

        Computer - Tastatur

        Ihre Aufgabe ist es, sich so viele Wortpaare wie möglich einzuprägen.

        Drücken Sie eine Taste, um fortzufahren.
    KeyboardComponent instruction1_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions2
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    TextComponent instructions2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Manchmal wird Ihnen ein einzelnes Wort auf dem Bildschirm angezeigt, bevor Sie das gesamte Wortpaar sehen, und Sie müssen raten, was das andere Wort sein könnte.

        Zum Beispiel:

        Computer - ?

        Drücken Sie eine Taste, um fortzufahren.
    KeyboardComponent instruction2_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions3
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    TextComponent instructions3_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Raten Sie nicht laut, sondern versuchen Sie möglichst viele Assoziationen zum linken Wort leise in Ihrem Kopf zu generieren.

        Zum Beispiel könnten Ihnen zum Wort "Sommerferien" folgende Assoziationen einfallen: Urlaub, Strand, Reisen, Ferienjob, Eis und so weiter.

        Drücken Sie eine Taste, um fortzufahren.
    KeyboardComponent instruction3_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions4
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    TextComponent instructions4_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Sie haben 3 Sekunden Zeit, um nach dem Erscheinen des linken Wortes mindestens einen stillen Rateversuch zu machen. Sie müssen angeben, ob Sie einen Rateversuch machen konnten, indem Sie die Tasten 1 oder 2 drücken.

        1) Rateversuch generiert 2) Keinen Rateversuch generiert

        Drücken Sie eine Taste, um fortzufahren.
    KeyboardComponent instruction4_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions5
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    TextComponent instructions5_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Zusammenfassung:
        Ihre Aufgabe ist es, so viele der auf dem Bildschirm präsentierten Wortpaare wie möglich zu lernen.

        Manchmal wird Ihnen zunächst nur ein einzelnes Wort angezeigt, und Sie müssen raten, was das zugehörige Wortpaar sein könnte. Drücken Sie 1 oder 2, um anzugeben, ob Sie einen Rateversuch gemacht haben.

        Vor dem Experiment werden Sie die Aufgabe üben.

        Drücken Sie eine Taste, um mit der Übung zu beginnen.
    KeyboardComponent instruction5_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine iti_learning_practice
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    CodeComponent set_practice_guess_stim
      Code Type = Auto->JS
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      End Routine:
        guess_cond = practice_list.pop()
        this_cue = cue
        this_target = target
        run_counter = 0
    TextComponent iti_practice_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine encode
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    TextComponent dash_stim_learning
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = -
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    TextComponent cue_stim_learning
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $this_cue
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    TextComponent target_stim
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $this_target
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    KeyboardComponent end_encoding
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.00
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    CodeComponent save_learning_trial_type
      Code Type = Auto->JS
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      Begin Routine:
        cue_types[this_cue] = guess_cond
        target_types[this_target] = guess_cond
        thisExp.addData('trial_type', guess_cond)
        thisExp.addData('Cue', this_cue)
        thisExp.addData('Target', this_target)
        thisExp.addData('RunNr', run_counter)
  Routine feedback_guess
    RoutineSettingsComponent feedback_guess
      skipIf = guess_cond == "Read"
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    CodeComponent skip_guess_feedback
      Code Type = Auto->JS
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      Begin Routine:
        if guess_cond == "Read":
            trial_dur = 0.000
        else:
            trial_dur = 1.5
    CodeComponent guess_feedback
      Code Type = Auto->JS
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      Begin Routine:
        feedback = "Ihre Antwort: "

        if guess_reached.keys == no_guess_made_key:
            feedback = feedback + "\nKeinen Rateversuch gemacht."
        elif guess_reached.keys == guess_made_key:
            feedback = feedback + "\nRateversuch gemacht."
        else:
            feedback = feedback + "\nKeine Antwort gegeben."
    TextComponent no_response_feedback
      durationEstim = 0.01
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $feedback
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  Routine feedback_rate
    RoutineSettingsComponent feedback_rate
      skipIf = $rate_relatedness.keys == None
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    TextComponent rating_feedback
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Your rating:
    TextComponent rating_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $rate_relatedness.keys
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  Routine feedback_no_rating
    RoutineSettingsComponent feedback_no_rating
      skipIf = $rate_relatedness.keys != None
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    TextComponent no_rating_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        You did not rate the relatedness.

        You need to rate how related you think the words are.
  Routine guess
    RoutineSettingsComponent guess
      skipIf = guess_cond == "Read"
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    CodeComponent skip_guess
      Code Type = Auto->JS
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      Begin Routine:
        if guess_cond == "Read":
            trial_dur = 0.000
        else:
            trial_dur = guess_dur
    TextComponent dash_stim_guessing
      durationEstim = 0.01
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = -
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    TextComponent cue_stim_guessing
      durationEstim = 0.01
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $this_cue
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    TextComponent guess_stim
      durationEstim = 0.01
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = ?
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    KeyboardComponent end_guess
      allowedKeys = 'p'
      durationEstim = 0.01
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
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  Routine end_part1
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    KeyboardComponent end_part1_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent end_part1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sie haben den ersten Teil des Experiments abgeschlossen!

        Drücken Sie eine Taste, um fortzufahren.
  Routine guess_response
    RoutineSettingsComponent guess_response
      skipIf = guess_cond == "Read"
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    CodeComponent skip_guess_response
      Code Type = Auto->JS
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      Begin Routine:
        if guess_cond == "Read":
            trial_dur = 0.000
        else:
            trial_dur = guess_resp_dur
    TextComponent dash_stim_guessing_resp
      durationEstim = 0.01
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = -
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    TextComponent cue_stim_guessing_resp
      durationEstim = 0.01
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $this_cue
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    TextComponent guess_stim_resp
      durationEstim = 0.01
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = ?
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    TextComponent guess_question
      durationEstim = 0.01
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
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      text:
        1) Ja        2) Nein
    KeyboardComponent guess_reached
      allowedKeys = all_keys
      durationEstim = 0.01
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
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  Routine start_task
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    TextComponent start_task_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Jetzt beginnt die Aufgabe. Sie erhalten keine Rückmeldungen mehr.

        Drücken Sie eine Taste, wenn Sie bereit sind zu starten.
    KeyboardComponent start_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent set_up_run_counter
      Code Type = Auto->JS
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      Begin Routine:
        run_counter = 1
  Routine task_break
    RoutineSettingsComponent task_break
      skipIf = run_counter >= 2
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    TextComponent task_break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Pause. Drücken Sie eine Taste, um fortzufahren.
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    KeyboardComponent task_break_resp
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent task_reset_counter
      Code Type = Auto->JS
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      End Routine:
        run_counter = run_counter + 1
  Routine guess_delay
    RoutineSettingsComponent guess_delay
      skipIf = guess_cond == "Read"
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    CodeComponent skip_guess_delay
      Code Type = Auto->JS
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      Begin Routine:
        if guess_cond == "Read":
            trial_dur = 0.000
        else:
            trial_dur = guess_delay_dur
    TextComponent guess_delay_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = trial_dur
      text = +
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  Routine load_iti
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    CodeComponent load_iti_code
      Code Type = Auto->JS
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      Begin Experiment:
        iti_list = []
      Begin Routine:
        iti_list.append(iti)
  Routine wait_for_trigger
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    CodeComponent catch_trigger
      Code Type = Auto->JS
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      Each Frame:
        if expInfo["MRI"] == "1":
            if port.readPin(pinNumber) > 0:
                continueRoutine = False #A trigger was detected, so move on
    TextComponent starting_soon
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = fMRT startet gleich...
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    KeyboardComponent skip_trigger
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prep_scanner
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    KeyboardComponent scanner_ready_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ready_set_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Der Scanner wird vorbereitet.
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  Routine cued_recall
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    CodeComponent save_recall_trial_type
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('trial_type', cue_types[this_cue])
        thisExp.addData('Cue', this_cue)
        thisExp.addData('Target', this_target)
        thisExp.addData('RunNr', run_counter)
    TextComponent dash_stim_recall
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = -
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    TextComponent qmark_target
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = ?
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    KeyboardComponent end_cued_recall
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent cue_stim_recall
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $this_cue
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  Routine recall_response
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    TextComponent dash_stim_recall_resp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = -
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    TextComponent cue_stim_recall_resp
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $this_cue
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    TextComponent recall_stim_resp
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = ?
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    TextComponent recall_question
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = 1) Nein        2) Ja
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    KeyboardComponent recall_reached
      allowedKeys = all_keys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent skip_recall_select
      Code Type = Auto->JS
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      End Routine:
        skip_letters = 0
        trial_dur = letter_dur
        if recall_reached.keys == succ_recall_key:
            trial_dur = letter_dur
        else:
            trial_dur = 0.00
            skip_letters = 1
  Routine recall_select
    RoutineSettingsComponent recall_select
      forceNonSlip = True
      skipIf = skip_letters >= 1
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    CodeComponent letter_choice
      Code Type = Auto->JS
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      Begin Routine:
        recall_select_text = ""

        random_letters = rnd.sample("abcdefghijklmnoprstuvz", k=3)
        target_letter = this_target[-1]
        while target_letter in random_letters:
            random_letters = rnd.sample("abcdefghijklmnoprstuvz", k=3)


        random_letters.append(target_letter)

        letters = rnd.sample(random_letters, len(random_letters))
        thisExp.addData('letter_options', letters)

        recall_select_text += "1) " + letters[0] + "        "
        recall_select_text += "2) " + letters[1] + "        "
        recall_select_text += "3) " + letters[2] + "        "
        recall_select_text += "4) " + letters[3]
      End Routine:
        this_choice = ""
        correct_choice = 0
        if skip_letters  <= 1:
            if len(recall_selection.keys) > 0:
                this_key = int(recall_selection.keys[0]) - 2
                this_choice = letters[this_key]

                if this_choice == target_letter:
                    correct_choice = 1
                    if (run_counter == 1) or (run_counter == 2):
                        ncorrect = ncorrect + 1

                        if cue_types[this_cue] == "Read":
                            correct_read = correct_read + 1
                        elif cue_types[this_cue] == "Guess":
                            correct_guess = correct_guess + 1

        thisExp.addData('correct_choice', correct_choice)
    TextComponent dash_stim_recall_select
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = -
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    TextComponent cue_stim_recall_select
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $this_cue
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    TextComponent recall_stim_select
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = ?
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    TextComponent recall_question_select
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $recall_select_text
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    KeyboardComponent recall_selection
      allowedKeys = all_keys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
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  Routine end_part2
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    TextComponent end_part2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Sie haben den zweiten Teil des Experiments abgeschlossen!
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    CodeComponent print_performance
      Code Type = Auto->JS
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      Begin Routine:
        print("Correctly selected: ", ncorrect)
        print("Correct pretested: ", correct_guess)
        print("Correct read: ", correct_read)
  Routine instructions_recall1
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    TextComponent recall_instructions1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Im nächsten Teil des Experiments müssen Sie das Wortpaar zu jedem auf dem Bildschirm angezeigten Wort abrufen.

        Versuchen Sie, das Wort (3 Sekunden) abzurufen, und geben Sie dann an, ob Sie sich an das Wort erinnern, indem Sie die Tasten 1 (Kann mich nicht erinnern) und 2 (Kann mich erinnern) verwenden.

        Drücken Sie eine Taste, um fortzufahren.
    KeyboardComponent recall_instructions1_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_recall2
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    TextComponent recall_instructions2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Wenn Sie sich an das Wort erinnern können, fragen wir Sie nach dem letzten Buchstaben des Wortes. Sie können aus 4 Optionen wählen (Tasten 1-4).

        Bevor Sie starten, üben Sie die Aufgabe.

        Drücken Sie eine Taste, um mit der Übung zu beginnen.
    KeyboardComponent recall_instructions2_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine recall_feedback
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    TextComponent dash_stim_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = -
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    TextComponent cue_stim_feedback
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $cue
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    TextComponent target_stim_feedback
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $target
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    KeyboardComponent end_feedback
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.00
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    TextComponent recall_feedback1
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Der letzte Buchstabe:
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    TextComponent recall_feedback2
      letterHeight = 0.05
      pos = (0.0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $this_target[-1]
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  Routine iti_recall_practice
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    TextComponent iti_recall_practice_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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    CodeComponent set_recall_practice_stim
      Code Type = Auto->JS
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      End Routine:
        this_cue = cue
        this_target = target
        run_counter = 0
  Routine iti_task
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    TextComponent iti_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = this_iti
      text = +
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  Routine setup_learning_trial
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    CodeComponent set_iti_guess_stim
      Code Type = Auto->JS
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      Begin Routine:
        guess_cond = guess_list.pop()
        this_iti = iti_list.pop()
        this_cue = cue_list.pop()
        this_target = target_list.pop()
        if guess_cond == "Guess":
            guess_delay_dur = delay_list.pop()
  Routine setup_recall_trial
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    CodeComponent set_iti_stim_recall
      Code Type = Auto->JS
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      Begin Routine:
        this_iti = iti_list.pop()
        this_cue = cue_list.pop()
        this_target = target_list.pop()

        if len(cue_list) == 40:
            print('Last recall trial in run')
        elif len(cue_list) == 0:
            print('Last recall trial')
  Routine blank
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    TextComponent begin_end_run_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12.0
      text = +
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    SoundComponent sound_1
      sound [set every repeat] = bell.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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    SoundComponent sound_2
      sound [set every repeat] = end_call.wav
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 1
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  Routine load_word_pairs
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    CodeComponent load_stimuli
      Code Type = Auto->JS
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      Begin Experiment:
        cue_list = []
        target_list = []
      Begin Routine:
        cue_list.append(cue)
        target_list.append(target)
  Routine load_delay
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    CodeComponent load_delay_code
      Code Type = Auto->JS
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      Begin Experiment:
        delay_list = []
      Begin Routine:
        delay_list.append(delay)
  Routine dist_feedback
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    TextComponent dist_fback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $fback_text
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  Routine start_dist_prac
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    TextComponent start_dist_prac_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Jetzt beginnt die Übung. 
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    CodeComponent dist_pr_clock
      Code Type = Auto->JS
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      Begin Routine:
        startTime = core.getTime()
        dt = 0
Flow
  Routine welcome
  Routine instructions1
  Routine instructions2
  Routine instructions3
  Routine instructions4
  Routine instructions5
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Wand', 'target': 'Fenster'},
      {'cue': 'Frühstück', 'target': 'Brot'},
      {'cue': 'Hund', 'target': 'Pfote'},
      {'cue': 'Park', 'target': 'Spielplatz'}]
    Routine iti_learning_practice
    Routine guess_response
    Routine feedback_guess
    Routine guess_delay
    Routine encode
  LoopTerminator practice_trials
  LoopInitiator learning_words_loop loopType="TrialHandler"
    conditionsFile = cue_target_pairs.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Akrobatin', 'target': 'Seil'},
      {'cue': 'Chips', 'target': 'Salz'},
      {'cue': 'Definition', 'target': 'Begriff'},
      {'cue': 'Experiment', 'target': 'Versuch'},
      {'cue': 'Fakt', 'target': 'Wissen'},
      {'cue': 'Leistung', 'target': 'Ehre'},
      {'cue': 'Rauch', 'target': 'Nebel'},
      {'cue': 'Scheidung', 'target': 'Anwalt'},
      {'cue': 'Service', 'target': 'Kunde'},
      {'cue': 'Shampoo', 'target': 'Seife'},
      {'cue': 'Soldat', 'target': 'Kämpfer'},
      {'cue': 'Zeichnung', 'target': 'Bleistift'},
      {'cue': 'Anführer', 'target': 'Boss'},
      {'cue': 'Beutel', 'target': 'Sack'},
      {'cue': 'Gast', 'target': 'Zimmer'},
      {'cue': 'Geburtstag', 'target': 'Kerze'},
      {'cue': 'Geschwister', 'target': 'Eltern'},
      {'cue': 'Golf', 'target': 'Loch'},
      {'cue': 'Küche', 'target': 'Tisch'},
      {'cue': 'Rasen', 'target': 'Pflege'},
      {'cue': 'Safari', 'target': 'Ausflug'},
      {'cue': 'Sitzgurt', 'target': 'Gesetz'},
      {'cue': 'Vampir', 'target': 'Geist'},
      {'cue': 'Vergangenheit', 'target': 'Erinnerungen'},
      {'cue': 'Agent', 'target': 'Reise'},
      {'cue': 'Brise', 'target': 'Luft'},
      {'cue': 'Decke', 'target': 'Kissen'},
      {'cue': 'Diskussion', 'target': 'Vorlesung'},
      {'cue': 'Eingeweide', 'target': 'Organ'},
      {'cue': 'Floh', 'target': 'Käfer'},
      {'cue': 'Frieden', 'target': 'Harmonie'},
      {'cue': 'Garage', 'target': 'Haus'},
      {'cue': 'Gegenstand', 'target': 'Artikel'},
      {'cue': 'Humor', 'target': 'Komödie'},
      {'cue': 'Insel', 'target': 'Meer'},
      {'cue': 'Karneval', 'target': 'Festival'},
      {'cue': 'Mappe', 'target': 'Buch'},
      {'cue': 'Publikum', 'target': 'Applaus'},
      {'cue': 'Pumpe', 'target': 'Reifen'}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
    Routine load_word_pairs
  LoopTerminator learning_words_loop
  Routine start_task
  LoopInitiator learning_block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    LoopInitiator learning_conditions_loop loopType="TrialHandler"
      conditionsFile = guess_condition_randomization.xlsx
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [{'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'},
        {'guess_condition': 'Read'},
        {'guess_condition': 'Guess'}]
      Routine load_guess_conditions
    LoopTerminator learning_conditions_loop
    LoopInitiator iti_learning_loop loopType="TrialHandler"
      conditionsFile = iti_randomization.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('iti', 2.8203)]),
        OrderedDict([('iti', 2.4938)]),
        OrderedDict([('iti', 3.0305)]),
        OrderedDict([('iti', 2.2019)]),
        OrderedDict([('iti', 3.4237)]),
        OrderedDict([('iti', 3.5412)]),
        OrderedDict([('iti', 2.5985)]),
        OrderedDict([('iti', 3.3274)]),
        OrderedDict([('iti', 3.9996)]),
        OrderedDict([('iti', 2.1196)]),
        OrderedDict([('iti', 2.1116)]),
        OrderedDict([('iti', 2.959)]),
        OrderedDict([('iti', 3.2655)]),
        OrderedDict([('iti', 2.6679)]),
        OrderedDict([('iti', 3.6914)]),
        OrderedDict([('iti', 2.183)]),
        OrderedDict([('iti', 2.1979)]),
        OrderedDict([('iti', 3.4378)]),
        OrderedDict([('iti', 4.88)]),
        OrderedDict([('iti', 3.8904)]),
        OrderedDict([('iti', 2.0835)]),
        OrderedDict([('iti', 2.5352)]),
        OrderedDict([('iti', 2.1184)]),
        OrderedDict([('iti', 2.2331)]),
        OrderedDict([('iti', 2.5969)]),
        OrderedDict([('iti', 2.5002)]),
        OrderedDict([('iti', 4.4869)]),
        OrderedDict([('iti', 5.6937)]),
        OrderedDict([('iti', 2.244)]),
        OrderedDict([('iti', 2.2153)]),
        OrderedDict([('iti', 3.5475)]),
        OrderedDict([('iti', 4.7902)]),
        OrderedDict([('iti', 3.0553)]),
        OrderedDict([('iti', 2.4832)]),
        OrderedDict([('iti', 2.7165)]),
        OrderedDict([('iti', 2.0459)]),
        OrderedDict([('iti', 2.3091)]),
        OrderedDict([('iti', 4.4534)]),
        OrderedDict([('iti', 2.5498)]),
        OrderedDict([('iti', 2.1239)])]
      Routine load_iti
    LoopTerminator iti_learning_loop
    LoopInitiator delay_loading_loop loopType="TrialHandler"
      conditionsFile = guess_random_delay.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('delay', 2.8837)]),
        OrderedDict([('delay', 4.7366)]),
        OrderedDict([('delay', 3.4356)]),
        OrderedDict([('delay', 2.8495)]),
        OrderedDict([('delay', 2.1846)]),
        OrderedDict([('delay', 4.3364)]),
        OrderedDict([('delay', 2.1475)]),
        OrderedDict([('delay', 3.5504)]),
        OrderedDict([('delay', 2.0507)]),
        OrderedDict([('delay', 2.7548)]),
        OrderedDict([('delay', 2.7061)]),
        OrderedDict([('delay', 3.2936)]),
        OrderedDict([('delay', 3.0478)]),
        OrderedDict([('delay', 2.7141)]),
        OrderedDict([('delay', 4.0504)]),
        OrderedDict([('delay', 2.218)]),
        OrderedDict([('delay', 3.7496)]),
        OrderedDict([('delay', 4.467)]),
        OrderedDict([('delay', 2.1205)]),
        OrderedDict([('delay', 2.521)])]
      Routine load_delay
    LoopTerminator delay_loading_loop
    Routine prep_scanner
    Routine wait_for_trigger
    Routine blank
    LoopInitiator learning_trials loopType="TrialHandler"
      loopType = random
      nReps = num_trials
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      conditions:
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      Routine setup_learning_trial
      Routine guess_response
      Routine guess_delay
      Routine encode
      Routine iti_task
    LoopTerminator learning_trials
    Routine blank
    Routine task_break
  LoopTerminator learning_block
  Routine end_part1
  Routine distractor_instruction
  Routine start_dist_prac
  LoopInitiator dist_practice loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Smiley_file': 'Smiley_left.png', 'circlePos': [-0.3, 0], 'correctdirection': 'left', 'correctResponse': 2, 'distractorPos': [0.3, 0]},
      {'Smiley_file': 'Smiley_right.png', 'circlePos': [0.3, 0], 'correctdirection': 'right', 'correctResponse': 3, 'distractorPos': [-0.3, 0]},
      {'Smiley_file': 'Smiley_left.png', 'circlePos': [0.3, 0], 'correctdirection': 'right', 'correctResponse': 3, 'distractorPos': [-0.3, 0]},
      {'Smiley_file': 'Smiley_right.png', 'circlePos': [-0.3, 0], 'correctdirection': 'left', 'correctResponse': 2, 'distractorPos': [0.3, 0]}]
    Routine dist_trial
    Routine dist_feedback
  LoopTerminator dist_practice
  Routine start_dist
  LoopInitiator dist_trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1999
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    conditions:
      [{'Smiley_file': 'Smiley_left.png', 'circlePos': [-0.3, 0], 'correctdirection': 'left', 'correctResponse': 2, 'distractorPos': [0.3, 0]},
      {'Smiley_file': 'Smiley_right.png', 'circlePos': [0.3, 0], 'correctdirection': 'right', 'correctResponse': 3, 'distractorPos': [-0.3, 0]},
      {'Smiley_file': 'Smiley_left.png', 'circlePos': [0.3, 0], 'correctdirection': 'right', 'correctResponse': 3, 'distractorPos': [-0.3, 0]},
      {'Smiley_file': 'Smiley_right.png', 'circlePos': [-0.3, 0], 'correctdirection': 'left', 'correctResponse': 2, 'distractorPos': [0.3, 0]}]
    Routine dist_trial
  LoopTerminator dist_trials
  Routine instructions_recall1
  Routine instructions_recall2
  LoopInitiator recall_practice loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Wand', 'target': 'Fenster'},
      {'cue': 'Frühstück', 'target': 'Brot'},
      {'cue': 'Hund', 'target': 'Pfote'},
      {'cue': 'Park', 'target': 'Spielplatz'}]
    Routine iti_recall_practice
    Routine cued_recall
    Routine recall_response
    Routine recall_select
    Routine recall_feedback
  LoopTerminator recall_practice
  LoopInitiator recall_words_loop loopType="TrialHandler"
    conditionsFile = cue_target_pairs.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Fakt', 'target': 'Wissen'},
      {'cue': 'Frieden', 'target': 'Harmonie'},
      {'cue': 'Humor', 'target': 'Komödie'},
      {'cue': 'Kante', 'target': 'Klinge'},
      {'cue': 'Scheidung', 'target': 'Anwalt'},
      {'cue': 'Service', 'target': 'Center'},
      {'cue': 'Tradition', 'target': 'Erbe'},
      {'cue': 'Vergangenheit', 'target': 'Zeit'},
      {'cue': 'Vers', 'target': 'Kapitel'},
      {'cue': 'Winter', 'target': 'Weiß'},
      {'cue': 'Geburtstag', 'target': 'Kerzen'},
      {'cue': 'Golf', 'target': 'Schwung'},
      {'cue': 'Ostern', 'target': 'Sonntag'},
      {'cue': 'Olympia', 'target': 'Medaille'},
      {'cue': 'Safari', 'target': 'Elephant'},
      {'cue': 'Eule', 'target': 'Augen'},
      {'cue': 'Hai', 'target': 'Ozean'},
      {'cue': 'Schnecke', 'target': 'Schleim'},
      {'cue': 'Spinne', 'target': 'Beine'},
      {'cue': 'Ziege', 'target': 'Bart'},
      {'cue': 'Finger', 'target': 'Puppe'},
      {'cue': 'Knie', 'target': 'Knöchel'},
      {'cue': 'Nase', 'target': 'Atem'},
      {'cue': 'Schulter', 'target': 'Schmerz'},
      {'cue': 'Zunge', 'target': 'Sprache'},
      {'cue': 'Chips', 'target': 'Salz'},
      {'cue': 'Nudeln', 'target': 'Pizza'},
      {'cue': 'Tee', 'target': 'Blätter'},
      {'cue': 'Saft', 'target': 'Tomate'},
      {'cue': 'Zimt', 'target': 'Rolle'},
      {'cue': 'Bad', 'target': 'Dusche'},
      {'cue': 'Club', 'target': 'Tanz'},
      {'cue': 'Büro', 'target': 'Geschäft'},
      {'cue': 'Garten', 'target': 'Zwerg'},
      {'cue': 'Wüste', 'target': 'Sturm'},
      {'cue': 'Keller', 'target': 'Flut'},
      {'cue': 'Kino', 'target': 'Popcorn'},
      {'cue': 'Küche', 'target': 'Tisch'},
      {'cue': 'Raum', 'target': 'Wohnung'},
      {'cue': 'Schule', 'target': 'Bücher'},
      {'cue': 'Beutel', 'target': 'Sack'}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
    Routine load_word_pairs
  LoopTerminator recall_words_loop
  Routine start_task
  LoopInitiator recall_block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    LoopInitiator iti_recall_loop loopType="TrialHandler"
      conditionsFile = iti_randomization.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('iti', 2.8203)]),
        OrderedDict([('iti', 2.4938)]),
        OrderedDict([('iti', 3.0305)]),
        OrderedDict([('iti', 2.2019)]),
        OrderedDict([('iti', 3.4237)]),
        OrderedDict([('iti', 3.5412)]),
        OrderedDict([('iti', 2.5985)]),
        OrderedDict([('iti', 3.3274)]),
        OrderedDict([('iti', 3.9996)]),
        OrderedDict([('iti', 2.1196)]),
        OrderedDict([('iti', 2.1116)]),
        OrderedDict([('iti', 2.959)]),
        OrderedDict([('iti', 3.2655)]),
        OrderedDict([('iti', 2.6679)]),
        OrderedDict([('iti', 3.6914)]),
        OrderedDict([('iti', 2.183)]),
        OrderedDict([('iti', 2.1979)]),
        OrderedDict([('iti', 3.4378)]),
        OrderedDict([('iti', 4.88)]),
        OrderedDict([('iti', 3.8904)]),
        OrderedDict([('iti', 2.0835)]),
        OrderedDict([('iti', 2.5352)]),
        OrderedDict([('iti', 2.1184)]),
        OrderedDict([('iti', 2.2331)]),
        OrderedDict([('iti', 2.5969)]),
        OrderedDict([('iti', 2.5002)]),
        OrderedDict([('iti', 4.4869)]),
        OrderedDict([('iti', 5.6937)]),
        OrderedDict([('iti', 2.244)]),
        OrderedDict([('iti', 2.2153)]),
        OrderedDict([('iti', 3.5475)]),
        OrderedDict([('iti', 4.7902)]),
        OrderedDict([('iti', 3.0553)]),
        OrderedDict([('iti', 2.4832)]),
        OrderedDict([('iti', 2.7165)]),
        OrderedDict([('iti', 2.0459)]),
        OrderedDict([('iti', 2.3091)]),
        OrderedDict([('iti', 4.4534)]),
        OrderedDict([('iti', 2.5498)]),
        OrderedDict([('iti', 2.1239)])]
      Routine load_iti
    LoopTerminator iti_recall_loop
    Routine prep_scanner
    Routine wait_for_trigger
    Routine blank
    LoopInitiator test_trials loopType="TrialHandler"
      loopType = random
      nReps = num_trials
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      conditions:
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      Routine setup_recall_trial
      Routine cued_recall
      Routine recall_response
      Routine recall_select
      Routine iti_task
    LoopTerminator test_trials
    Routine blank
    Routine task_break
  LoopTerminator recall_block
  Routine end_part2
