PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Completed URL = https://regensburg.sona-systems.com/webstudy_credit.aspx?experiment_id=1093&credit_token=3ab017d6ceb04173ba128bd636423369&survey_code=" + expInfo[‘participant’]
  Data filename = u'data/Guess_%s_%s_%s' % (expInfo['PID'], expName, expInfo['date'])
  Experiment info = {'PID': '', 'Birthyear': '', 'Gender': '', 'Handedness': '', 'MRI': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1440, 900]
  expName = part2_standalone
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Willkommen zum Ratespiel Experiment!
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    CodeComponent experiment_setup
      Code Type = Auto->JS
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      Begin Experiment:
        # import random for letter randomization
        import random as rnd

        if expInfo["MRI"] == "1":
            from psychopy import parallel
            port = parallel.ParallelPort(address = 0x2FE8)
            pinNumber = 10 #Change to match the pin that is receiving the pulse value sent by your scanner. Set this to None to scan all pins

        all_keys = ['space', '1', '2', '3', '4', '5']
        guess_made_key = "2"
        no_guess_made_key = "3"

        guess_dur = 3
        guess_resp_dur = 3
        guess_delay_dur = 3

        cue_types = {}
        target_types = {}

        succ_recall_key = "3"
        letter_dur = 3

        run_counter = 1

        ncorrect = 0
        correct_guess = 0
        correct_read = 0

        num_trials = 40 # number of trials per run
        if expInfo["PID"] == "pilot" :
            num_trials = 2
    KeyboardComponent start_experiment_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_task
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    TextComponent start_task_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Jetzt beginnt die Aufgabe. Sie erhalten keine Rückmeldungen mehr.

        Drücken Sie eine Taste, wenn Sie bereit sind zu starten.
    KeyboardComponent start_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent set_up_run_counter
      Code Type = Auto->JS
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      Begin Routine:
        run_counter = 1
  Routine task_break
    RoutineSettingsComponent task_break
      skipIf = run_counter >= 2
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    TextComponent task_break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Pause. Drücken Sie eine Taste, um fortzufahren.
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    KeyboardComponent task_break_resp
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent task_reset_counter
      Code Type = Auto->JS
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      End Routine:
        run_counter = run_counter + 1
  Routine load_iti
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    CodeComponent load_iti_code
      Code Type = Auto->JS
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      Begin Experiment:
        iti_list = []
      Begin Routine:
        iti_list.append(iti)
  Routine wait_for_trigger
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    CodeComponent catch_trigger
      Code Type = Auto->JS
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      Each Frame:
        if expInfo["MRI"] == "1":
            if port.readPin(pinNumber) > 0:
                continueRoutine = False #A trigger was detected, so move on
    TextComponent starting_soon
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = fMRT startet gleich...
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    KeyboardComponent skip_trigger
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prep_scanner
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    KeyboardComponent scanner_ready_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ready_set_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Der Scanner wird vorbereitet.
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  Routine cued_recall
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    CodeComponent save_recall_trial_type
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('Cue', this_cue)
        thisExp.addData('Target', this_target)
        thisExp.addData('RunNr', run_counter)
    TextComponent dash_stim_recall
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = -
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    TextComponent qmark_target
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = ?
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    KeyboardComponent end_cued_recall
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent cue_stim_recall
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $this_cue
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  Routine recall_response
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    TextComponent dash_stim_recall_resp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = -
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    TextComponent cue_stim_recall_resp
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $this_cue
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    TextComponent recall_stim_resp
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = ?
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    TextComponent recall_question
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = 1) Nein        2) Ja
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    KeyboardComponent recall_reached
      allowedKeys = all_keys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent skip_recall_select
      Code Type = Auto->JS
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      End Routine:
        skip_letters = 0
        trial_dur = letter_dur
        if recall_reached.keys == succ_recall_key:
            trial_dur = letter_dur
        else:
            trial_dur = 0.00
            skip_letters = 1
  Routine recall_select
    RoutineSettingsComponent recall_select
      forceNonSlip = True
      skipIf = skip_letters >= 1
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    CodeComponent letter_choice
      Code Type = Auto->JS
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      Begin Routine:
        recall_select_text = ""

        random_letters = rnd.sample("abcdefghijklmnoprstuvz", k=3)
        target_letter = this_target[-1]
        while target_letter in random_letters:
            random_letters = rnd.sample("abcdefghijklmnoprstuvz", k=3)


        random_letters.append(target_letter)

        letters = rnd.sample(random_letters, len(random_letters))
        thisExp.addData('letter_options', letters)

        recall_select_text += "1) " + letters[0] + "        "
        recall_select_text += "2) " + letters[1] + "        "
        recall_select_text += "3) " + letters[2] + "        "
        recall_select_text += "4) " + letters[3]
      End Routine:
        this_choice = ""
        correct_choice = 0
        if skip_letters  <= 1:
            if len(recall_selection.keys) > 0:
                this_key = int(recall_selection.keys[0]) - 2
                this_choice = letters[this_key]

                if this_choice == target_letter:
                    correct_choice = 1
                    ncorrect = ncorrect + 1

        thisExp.addData('correct_choice', correct_choice)
    TextComponent dash_stim_recall_select
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = -
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    TextComponent cue_stim_recall_select
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $this_cue
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    TextComponent recall_stim_select
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text = ?
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    TextComponent recall_question_select
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $recall_select_text
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    KeyboardComponent recall_selection
      allowedKeys = all_keys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
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  Routine end_part2
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    TextComponent end_part2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Sie haben den zweiten Teil des Experiments abgeschlossen!
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    CodeComponent print_performance
      Code Type = Auto->JS
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      Begin Routine:
        print("Correctly selected: ", ncorrect)
        print("Correct pretested: ", correct_guess)
        print("Correct read: ", correct_read)
  Routine instructions_recall1
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    TextComponent recall_instructions1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Im nächsten Teil des Experiments müssen Sie das Wortpaar zu jedem auf dem Bildschirm angezeigten Wort abrufen.

        Versuchen Sie, das Wort (3 Sekunden) abzurufen, und geben Sie dann an, ob Sie sich an das Wort erinnern, indem Sie die Tasten 1 (Kann mich nicht erinnern) und 2 (Kann mich erinnern) verwenden.

        Drücken Sie eine Taste, um fortzufahren.
    KeyboardComponent recall_instructions1_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_recall2
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    TextComponent recall_instructions2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Wenn Sie sich an das Wort erinnern können, fragen wir Sie nach dem letzten Buchstaben des Wortes. Sie können aus 4 Optionen wählen (Tasten 1-4).

        Bevor Sie starten, üben Sie die Aufgabe.

        Drücken Sie eine Taste, um mit der Übung zu beginnen.
    KeyboardComponent recall_instructions2_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine recall_feedback
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    TextComponent dash_stim_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = -
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    TextComponent cue_stim_feedback
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $cue
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    TextComponent target_stim_feedback
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $target
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    KeyboardComponent end_feedback
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.00
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    TextComponent recall_feedback1
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Der letzte Buchstabe:
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    TextComponent recall_feedback2
      letterHeight = 0.05
      pos = (0.0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $this_target[-1]
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  Routine iti_recall_practice
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    TextComponent iti_recall_practice_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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    CodeComponent set_recall_practice_stim
      Code Type = Auto->JS
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      End Routine:
        this_cue = cue
        this_target = target
        run_counter = 0
  Routine iti_task
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    TextComponent iti_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = this_iti
      text = +
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  Routine setup_learning_trial
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    CodeComponent set_iti_guess_stim
      Code Type = Auto->JS
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      Begin Routine:
        guess_cond = guess_list.pop()
        this_iti = iti_list.pop()
        this_cue = cue_list.pop()
        this_target = target_list.pop()
        if guess_cond == "Guess":
            guess_delay_dur = delay_list.pop()
  Routine setup_recall_trial
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    CodeComponent set_iti_stim_recall
      Code Type = Auto->JS
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      Begin Routine:
        this_iti = iti_list.pop()
        this_cue = cue_list.pop()
        this_target = target_list.pop()

        if len(cue_list) == 40:
            print('Last recall trial in run')
        elif len(cue_list) == 0:
            print('Last recall trial')
  Routine blank
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    TextComponent begin_end_run_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12.0
      text = +
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    SoundComponent sound_1
      sound [set every repeat] = bell.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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    SoundComponent sound_2
      sound [set every repeat] = end_call.wav
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 1
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  Routine load_word_pairs
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    CodeComponent load_stimuli
      Code Type = Auto->JS
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      Begin Experiment:
        cue_list = []
        target_list = []
      Begin Routine:
        cue_list.append(cue)
        target_list.append(target)
  Routine load_delay
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    CodeComponent load_delay_code
      Code Type = Auto->JS
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      Begin Experiment:
        delay_list = []
      Begin Routine:
        delay_list.append(delay)
Flow
  Routine welcome
  Routine instructions_recall1
  Routine instructions_recall2
  LoopInitiator recall_practice loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Wand', 'target': 'Fenster'},
      {'cue': 'Frühstück', 'target': 'Brot'},
      {'cue': 'Hund', 'target': 'Pfote'},
      {'cue': 'Park', 'target': 'Spielplatz'}]
    Routine iti_recall_practice
    Routine cued_recall
    Routine recall_response
    Routine recall_select
    Routine recall_feedback
  LoopTerminator recall_practice
  LoopInitiator recall_words_loop loopType="TrialHandler"
    conditionsFile = cue_target_pairs.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Fakt', 'target': 'Wissen'},
      {'cue': 'Frieden', 'target': 'Harmonie'},
      {'cue': 'Humor', 'target': 'Komödie'},
      {'cue': 'Kante', 'target': 'Klinge'},
      {'cue': 'Scheidung', 'target': 'Anwalt'},
      {'cue': 'Service', 'target': 'Center'},
      {'cue': 'Tradition', 'target': 'Erbe'},
      {'cue': 'Vergangenheit', 'target': 'Zeit'},
      {'cue': 'Vers', 'target': 'Kapitel'},
      {'cue': 'Winter', 'target': 'Weiß'},
      {'cue': 'Geburtstag', 'target': 'Kerzen'},
      {'cue': 'Golf', 'target': 'Schwung'},
      {'cue': 'Ostern', 'target': 'Sonntag'},
      {'cue': 'Olympia', 'target': 'Medaille'},
      {'cue': 'Safari', 'target': 'Elephant'},
      {'cue': 'Eule', 'target': 'Augen'},
      {'cue': 'Hai', 'target': 'Ozean'},
      {'cue': 'Schnecke', 'target': 'Schleim'},
      {'cue': 'Spinne', 'target': 'Beine'},
      {'cue': 'Ziege', 'target': 'Bart'},
      {'cue': 'Finger', 'target': 'Puppe'},
      {'cue': 'Knie', 'target': 'Knöchel'},
      {'cue': 'Nase', 'target': 'Atem'},
      {'cue': 'Schulter', 'target': 'Schmerz'},
      {'cue': 'Zunge', 'target': 'Sprache'},
      {'cue': 'Chips', 'target': 'Salz'},
      {'cue': 'Nudeln', 'target': 'Pizza'},
      {'cue': 'Tee', 'target': 'Blätter'},
      {'cue': 'Saft', 'target': 'Tomate'},
      {'cue': 'Zimt', 'target': 'Rolle'},
      {'cue': 'Bad', 'target': 'Dusche'},
      {'cue': 'Club', 'target': 'Tanz'},
      {'cue': 'Büro', 'target': 'Geschäft'},
      {'cue': 'Garten', 'target': 'Zwerg'},
      {'cue': 'Wüste', 'target': 'Sturm'},
      {'cue': 'Keller', 'target': 'Flut'},
      {'cue': 'Kino', 'target': 'Popcorn'},
      {'cue': 'Küche', 'target': 'Tisch'},
      {'cue': 'Raum', 'target': 'Wohnung'},
      {'cue': 'Schule', 'target': 'Bücher'},
      {'cue': 'Beutel', 'target': 'Sack'}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
    Routine load_word_pairs
  LoopTerminator recall_words_loop
  Routine start_task
  LoopInitiator recall_block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    LoopInitiator iti_recall_loop loopType="TrialHandler"
      conditionsFile = iti_randomization.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('iti', 2.8203)]),
        OrderedDict([('iti', 2.4938)]),
        OrderedDict([('iti', 3.0305)]),
        OrderedDict([('iti', 2.2019)]),
        OrderedDict([('iti', 3.4237)]),
        OrderedDict([('iti', 3.5412)]),
        OrderedDict([('iti', 2.5985)]),
        OrderedDict([('iti', 3.3274)]),
        OrderedDict([('iti', 3.9996)]),
        OrderedDict([('iti', 2.1196)]),
        OrderedDict([('iti', 2.1116)]),
        OrderedDict([('iti', 2.959)]),
        OrderedDict([('iti', 3.2655)]),
        OrderedDict([('iti', 2.6679)]),
        OrderedDict([('iti', 3.6914)]),
        OrderedDict([('iti', 2.183)]),
        OrderedDict([('iti', 2.1979)]),
        OrderedDict([('iti', 3.4378)]),
        OrderedDict([('iti', 4.88)]),
        OrderedDict([('iti', 3.8904)]),
        OrderedDict([('iti', 2.0835)]),
        OrderedDict([('iti', 2.5352)]),
        OrderedDict([('iti', 2.1184)]),
        OrderedDict([('iti', 2.2331)]),
        OrderedDict([('iti', 2.5969)]),
        OrderedDict([('iti', 2.5002)]),
        OrderedDict([('iti', 4.4869)]),
        OrderedDict([('iti', 5.6937)]),
        OrderedDict([('iti', 2.244)]),
        OrderedDict([('iti', 2.2153)]),
        OrderedDict([('iti', 3.5475)]),
        OrderedDict([('iti', 4.7902)]),
        OrderedDict([('iti', 3.0553)]),
        OrderedDict([('iti', 2.4832)]),
        OrderedDict([('iti', 2.7165)]),
        OrderedDict([('iti', 2.0459)]),
        OrderedDict([('iti', 2.3091)]),
        OrderedDict([('iti', 4.4534)]),
        OrderedDict([('iti', 2.5498)]),
        OrderedDict([('iti', 2.1239)])]
      Routine load_iti
    LoopTerminator iti_recall_loop
    Routine prep_scanner
    Routine wait_for_trigger
    Routine blank
    LoopInitiator test_trials loopType="TrialHandler"
      loopType = random
      nReps = num_trials
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      conditions:
        [{'cue': 'Akrobatin', 'target': 'Seil'},
        {'cue': 'Chips', 'target': 'Salz'},
        {'cue': 'Definition', 'target': 'Begriff'},
        {'cue': 'Experiment', 'target': 'Versuch'},
        {'cue': 'Fakt', 'target': 'Wissen'},
        {'cue': 'Leistung', 'target': 'Ehre'},
        {'cue': 'Rauch', 'target': 'Nebel'},
        {'cue': 'Scheidung', 'target': 'Anwalt'},
        {'cue': 'Service', 'target': 'Kunde'},
        {'cue': 'Shampoo', 'target': 'Seife'},
        {'cue': 'Soldat', 'target': 'Kämpfer'},
        {'cue': 'Zeichnung', 'target': 'Bleistift'},
        {'cue': 'Anführer', 'target': 'Boss'},
        {'cue': 'Beutel', 'target': 'Sack'},
        {'cue': 'Gast', 'target': 'Zimmer'},
        {'cue': 'Geburtstag', 'target': 'Kerze'},
        {'cue': 'Geschwister', 'target': 'Eltern'},
        {'cue': 'Golf', 'target': 'Loch'},
        {'cue': 'Küche', 'target': 'Tisch'},
        {'cue': 'Rasen', 'target': 'Pflege'},
        {'cue': 'Safari', 'target': 'Ausflug'},
        {'cue': 'Sitzgurt', 'target': 'Gesetz'},
        {'cue': 'Vampir', 'target': 'Geist'},
        {'cue': 'Vergangenheit', 'target': 'Erinnerungen'},
        {'cue': 'Agent', 'target': 'Reise'},
        {'cue': 'Brise', 'target': 'Luft'},
        {'cue': 'Decke', 'target': 'Kissen'},
        {'cue': 'Diskussion', 'target': 'Vorlesung'},
        {'cue': 'Eingeweide', 'target': 'Organ'},
        {'cue': 'Floh', 'target': 'Käfer'},
        {'cue': 'Frieden', 'target': 'Harmonie'},
        {'cue': 'Garage', 'target': 'Haus'},
        {'cue': 'Gegenstand', 'target': 'Artikel'},
        {'cue': 'Humor', 'target': 'Komödie'},
        {'cue': 'Insel', 'target': 'Meer'},
        {'cue': 'Karneval', 'target': 'Festival'},
        {'cue': 'Mappe', 'target': 'Buch'},
        {'cue': 'Publikum', 'target': 'Applaus'},
        {'cue': 'Pumpe', 'target': 'Reifen'}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
      Routine setup_recall_trial
      Routine cued_recall
      Routine recall_response
      Routine recall_select
      Routine iti_task
    LoopTerminator test_trials
    Routine blank
    Routine task_break
  LoopTerminator recall_block
  Routine end_part2
