PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Completed URL = https://regensburg.sona-systems.com/webstudy_credit.aspx?experiment_id=1093&credit_token=3ab017d6ceb04173ba128bd636423369&survey_code=" + expInfo[‘participant’]
  Data filename = u'data/Guess_%s_%s_%s' % (expInfo['PID'], expName, expInfo['date'])
  Experiment info = {'PID': '', 'MRI': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1440, 900]
  expName = sm
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Willkommen zum Ratespiel Experiment!
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    CodeComponent experiment_setup
      Code Type = Auto->JS
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      Begin Experiment:
        # import random for letter randomization
        import random as rnd

        if expInfo['MRI'] == '1':
            from psychopy import parallel
            port = parallel.ParallelPort(address = 0x2FE8)
            pinNumber = 10 #Change to match the pin that is receiving the pulse value sent by your scanner. Set this to None to scan all pins

        all_keys = ['space', '1','2','3','4','5']

        my_runs = []
        iti_list = []
        list_item = "None"

        run_counter = 1

        num_trials = 80
        if expInfo['PID'] == 'pilot':
            num_trials = 4
    KeyboardComponent key_resp__welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait_for_trigger
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    TextComponent starting_soon
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = fMRT startet gleich...
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    CodeComponent catch_trigger
      Code Type = Auto->JS
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      Each Frame:
        if expInfo['MRI'] == '1':
            if port.readPin(pinNumber) > 0:
                continueRoutine = False #A trigger was detected, so move on
    KeyboardComponent skip_trigger
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prep_scanner
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    KeyboardComponent scanner_ready_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ready_set_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Der Scanner wird vorbereitet.
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  Routine load_iti
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    CodeComponent load_iti_code
      Code Type = Auto->JS
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      Begin Routine:
        iti_list.append(iti)
  Routine instructions_semantic_mapping1
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    TextComponent sm_instructions1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Im letzten Teil des Experiments wird Ihnen eine Liste von Wörtern jeweils einzeln auf dem Bildschirm präsentiert. Sie müssen entscheiden, ob das Wort etwas Lebendiges oder Nicht-Lebendiges bezeichnet.

        Drücken Sie eine Taste, um fortzufahren.
    KeyboardComponent sm_instructions1_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_semantic_mapping2
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    TextComponent sm_instructions2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Bei manchen Wörtern ist es schwieriger, diese Entscheidung zu treffen als bei anderen. Es gibt nicht immer eine richtige oder falsche Antwort. Verlassen Sie sich auf Ihre Intuition, die Entscheidung liegt bei Ihnen!

        Geben Sie Ihre Antwort innerhalb von 2 Sekunden mit den Tasten 1 / 2 an.

        Drücken Sie eine Taste, um die Aufgabe zu starten.
    KeyboardComponent sm_instructions2_key
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine item
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    KeyboardComponent living_nonliving
      allowedKeys = all_keys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent end_mapping
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent living_nonliving_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 1) Lebendig        2) Nicht lebendig
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    TextComponent semantic_map_item
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $this_item
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  Routine start_task
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    TextComponent start_task_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Jetzt beginnt die Aufgabe. Sie erhalten keine Rückmeldungen mehr.

        Drücken Sie die LEERTASTE, wenn Sie bereit sind zu starten.
    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent reset_trial_counter_2
      Code Type = Auto->JS
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      Begin Routine:
        task_trial = 0
  Routine mapping_break
    RoutineSettingsComponent mapping_break
      skipIf = mapping_trial < 60
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    TextComponent break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Pause. Drücken Sie die LEERTASTE, um fortzufahren.
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    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent reset_counter
      Code Type = Auto->JS
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      Begin Experiment:
        mapping_trial = 0
      Begin Routine:
        mapping_trial = mapping_trial + 1
        print("mapping_trial", mapping_trial)
      End Routine:
        if mapping_trial == 60:
            mapping_trial = 0

        print('break', mapping_trial)
  Routine thanks
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    TextComponent thanks_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Das ist das Ende des Experiments.

        Vielen Dank!
  Routine task_break
    RoutineSettingsComponent task_break
      skipIf = run_counter >= 8
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    TextComponent task_break_text
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      text = Drücken Sie eine Taste, um fortzufahren.
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    KeyboardComponent task_break_resp
      allowedKeys = all_keys
      forceEndRoutine = True
      startVal [time (s)] = 4.0
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    CodeComponent increase_run_counter
      Code Type = Auto->JS
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      Begin Routine:
        sm_feedback_text = "{}/8 geschafft.".format(run_counter)

        if run_counter == 4:
            praise_text = "Sie machen das großartig!\n"
            sm_feedback_text = praise_text + sm_feedback_text
        elif run_counter == 7:
            praise_text = "Gut gemacht! Nur noch eine Runde.\n"
            sm_feedback_text = praise_text + sm_feedback_text
        elif (run_counter > 4) & (run_counter < 7):
            praise_text = "Gut gemacht!\n"
            sm_feedback_text = praise_text + sm_feedback_text
      End Routine:
        run_counter = run_counter + 1
    TextComponent feeback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $sm_feedback_text
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  Routine shuffle_items
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    CodeComponent shuffle_lists
      Code Type = Auto->JS
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      Begin Routine:
        these_items = [Cue, Target, Mediator1, Mediator2] # assign elements from this row
        rnd.shuffle(these_items) # shuffle order

        # append to separate runs
        run1.append(these_items[0])
        run2.append(these_items[1])
        run3.append(these_items[2])
        run4.append(these_items[3])
  Routine set_up_runs
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    CodeComponent run_setup
      Code Type = Auto->JS
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      Begin Routine:
        rnd.shuffle(run1)
        rnd.shuffle(run2)
        rnd.shuffle(run3)
        rnd.shuffle(run4)

        my_runs = [run1, run2, run3, run4]
  Routine reset_run
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    CodeComponent create_runs
      Code Type = Auto->JS
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      Begin Routine:
        run1 = []
        run2 = []
        run3 = []
        run4 = []
  Routine set_up_trial
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    CodeComponent select_item
      Code Type = Auto->JS
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      Begin Routine:
        run_index = run_counter - 1
        if run_counter > 4:
            run_index = run_counter - 5
        this_run = my_runs[run_index]
        this_item = this_run.pop()
        this_iti = iti_list.pop()

        thisExp.addData('CurrentItem', this_item)
        thisExp.addData('CurrentITI', this_iti)
  Routine blank
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    TextComponent begin_end_run_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12.0
      text = +
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    SoundComponent sound_1
      sound [set every repeat] = bell.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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    SoundComponent sound_2
      sound [set every repeat] = end_call.wav
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 1
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  Routine sm_iti
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    TextComponent iti_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = this_iti
      text [set every repeat] = +
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  Routine fieldmap
    RoutineSettingsComponent fieldmap
      skipIf = run_counter != 4
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    TextComponent fm_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Wir führen einen kurzen technischen Scan durch. Dies wird 3 Minuten dauern.

        Sie können Ihre Augen für eine Weile schließen, aber schlafen Sie nicht ein.

        Bitte halten Sie still.
    KeyboardComponent fm_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine scout
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    TextComponent scout_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Wir führen einen kurzen technischen Scan durch. Dies wird 3 Minuten dauern. Bitte halten Sie still.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine scout
  Routine instructions_semantic_mapping1
  Routine instructions_semantic_mapping2
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    conditions:
      [{'this_sheet': 'run1_sheet.xlsx'},
      {'this_sheet': 'run2_sheet.xlsx'},
      {'this_sheet': 'run3_sheet.xlsx'},
      {'this_sheet': 'run4_sheet.xlsx'}]
    Routine reset_run
    LoopInitiator load_and_shuffle loopType="TrialHandler"
      conditionsFile = sm_words.xlsx
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [{'Cue': 'Fakt', 'Target': 'Wissen', 'Mediator1': 'Wahrheit', 'Mediator2': 'Fiktion'},
        {'Cue': 'Frieden', 'Target': 'Harmonie', 'Mediator1': 'Liebe', 'Mediator2': 'Krieg'},
        {'Cue': 'Humor', 'Target': 'Komödie', 'Mediator1': 'Lachen', 'Mediator2': 'Spaß'},
        {'Cue': 'Kante', 'Target': 'Klinge', 'Mediator1': 'Klippe', 'Mediator2': 'Ecke'},
        {'Cue': 'Scheidung', 'Target': 'Anwalt', 'Mediator1': 'Ehe', 'Mediator2': 'Trennung'},
        {'Cue': 'Service', 'Target': 'Station', 'Mediator1': 'Hilfe', 'Mediator2': 'Kunde'},
        {'Cue': 'Tradition', 'Target': 'Erbe', 'Mediator1': 'Weihnachten', 'Mediator2': 'Familie'},
        {'Cue': 'Vergangenheit', 'Target': 'Zeit', 'Mediator1': 'Gegenwart', 'Mediator2': 'Geschichte'},
        {'Cue': 'Vers', 'Target': 'Kapitel', 'Mediator1': 'Poesie', 'Mediator2': 'Lied'},
        {'Cue': 'Winter', 'Target': 'Weiss', 'Mediator1': 'Kälte', 'Mediator2': 'Schnee'},
        {'Cue': 'Geburtstag', 'Target': 'Kerze', 'Mediator1': 'Kuchen ', 'Mediator2': 'Feier'},
        {'Cue': 'Golf', 'Target': 'Loch', 'Mediator1': 'Ball', 'Mediator2': 'Schläger'},
        {'Cue': 'Oster', 'Target': 'Sonntag', 'Mediator1': 'Hase', 'Mediator2': 'Ei'},
        {'Cue': 'Olympia', 'Target': 'Medaille', 'Mediator1': 'Spiele', 'Mediator2': 'Ringe'},
        {'Cue': 'Safari', 'Target': 'Ausflug', 'Mediator1': 'Afrika', 'Mediator2': 'Dschungel'},
        {'Cue': 'Eule', 'Target': 'Augen', 'Mediator1': 'Vogel', 'Mediator2': 'Nacht'},
        {'Cue': 'Hai', 'Target': 'Ozean', 'Mediator1': 'Zähne', 'Mediator2': 'Angriff'},
        {'Cue': 'Schneke', 'Target': 'Schleim', 'Mediator1': 'Langsam', 'Mediator2': 'Hülse'}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
      Routine shuffle_items
    LoopTerminator load_and_shuffle
    Routine set_up_runs
    LoopInitiator runs loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 4
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      conditions:
        [{'thisList': 0},
        {'thisList': 1},
        {'thisList': 2},
        {'thisList': 3}]
      LoopInitiator iti_loading_loop loopType="TrialHandler"
        conditionsFile = sm_iti_randomization.csv
        isTrials = False
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('iti', 2.7584)]),
          OrderedDict([('iti', 5.1698)]),
          OrderedDict([('iti', 2.7357)]),
          OrderedDict([('iti', 3.2825)]),
          OrderedDict([('iti', 3.6723)]),
          OrderedDict([('iti', 2.9645)]),
          OrderedDict([('iti', 2.9109)]),
          OrderedDict([('iti', 2.8863)]),
          OrderedDict([('iti', 2.8901)]),
          OrderedDict([('iti', 2.3229)]),
          OrderedDict([('iti', 4.5524)]),
          OrderedDict([('iti', 2.1743)]),
          OrderedDict([('iti', 2.2639)]),
          OrderedDict([('iti', 2.0589)]),
          OrderedDict([('iti', 3.6297)]),
          OrderedDict([('iti', 2.0946)]),
          OrderedDict([('iti', 2.8516)]),
          OrderedDict([('iti', 2.3861)]),
          OrderedDict([('iti', 2.0031)]),
          OrderedDict([('iti', 3.189)]),
          OrderedDict([('iti', 2.3843)]),
          OrderedDict([('iti', 3.6615)]),
          OrderedDict([('iti', 3.1264)]),
          OrderedDict([('iti', 4.3756)]),
          OrderedDict([('iti', 2.5377)]),
          OrderedDict([('iti', 2.4521)]),
          OrderedDict([('iti', 5.3463)]),
          OrderedDict([('iti', 3.9589)]),
          OrderedDict([('iti', 2.9061)]),
          OrderedDict([('iti', 2.9036)]),
          OrderedDict([('iti', 2.5519)]),
          OrderedDict([('iti', 2.5982)]),
          OrderedDict([('iti', 5.3655)]),
          OrderedDict([('iti', 3.6564)]),
          OrderedDict([('iti', 3.4445)]),
          OrderedDict([('iti', 2.1949)]),
          OrderedDict([('iti', 2.83)]),
          OrderedDict([('iti', 2.9443)]),
          OrderedDict([('iti', 4.0852)]),
          OrderedDict([('iti', 2.9832)]),
          OrderedDict([('iti', 3.039)]),
          OrderedDict([('iti', 2.3006)]),
          OrderedDict([('iti', 2.0052)]),
          OrderedDict([('iti', 2.4916)]),
          OrderedDict([('iti', 2.1413)]),
          OrderedDict([('iti', 4.5959)]),
          OrderedDict([('iti', 2.1697)]),
          OrderedDict([('iti', 4.4429)]),
          OrderedDict([('iti', 2.4137)]),
          OrderedDict([('iti', 2.3916)])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
        Routine load_iti
      LoopTerminator iti_loading_loop
      Routine prep_scanner
      Routine wait_for_trigger
      Routine blank
      LoopInitiator semantic_mapping_run loopType="TrialHandler"
        loopType = random
        nReps = num_trials
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        conditions:
          [{'thisList': 0, 'thisIndex': 0},
          {'thisList': 0, 'thisIndex': 1},
          {'thisList': 0, 'thisIndex': 2},
          {'thisList': 0, 'thisIndex': 3},
          {'thisList': 0, 'thisIndex': 4}]
        Routine set_up_trial
        Routine sm_iti
        Routine item
      LoopTerminator semantic_mapping_run
      Routine blank
      Routine fieldmap
      Routine task_break
    LoopTerminator runs
  LoopTerminator blocks
  Routine thanks
